PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [900, 600]
  expName = mpad1_exp
  keyboardBackend = ioHub
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Routines
  Routine welcome
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    CodeComponent all_variables
      Code Type = Py
      Before Experiment:
        # TODO
        # fix baseline_temp & temp_baseline for all scripts
        # set start_study_mode to NoPrompt

        # Root logger
        from pathlib import Path
        from datetime import datetime
        from src.experiments.logger import setup_logger, close_logger

        log_dir = Path('log')
        log_dir.mkdir(parents=True, exist_ok=True)
        log_filename_str = datetime.now().strftime("%Y_%m_%d__%H_%M_%S") + ".log"
        log_file = log_dir / log_filename_str

        psychopy_logger = setup_logger(
            '',
            level=logging.INFO,
            log_file=log_file,
            stream_handler=False)

        # Info
        from src.experiments.participant_data import read_last_participant
        participant_info = read_last_participant()
        expInfo['expName'] = "mpad1_exp"
        expInfo['participant'] = participant_info['participant']
        expInfo['age'] = participant_info['age']
        expInfo['gender'] = participant_info['gender']

        # iMotions
        start_study_mode = "NormalPrompt"

        # Stimuli
        seeds = [320, 43, 999, 242, 32, 1, 98, 478, 48, 435, 54]
        n_trials = len(seeds)
        this_trial = None # just initializing

        minimal_desired_duration = 200 # in seconds
        periods = [67, 20] # [0] is the baseline and [1] the modulation; in seconds
        frequencies = 1./np.array(periods)
        # calculate amplitudes based on VAS 70 - VAS 0
        temp_range = participant_info['temp_range'] # VAS 70 - VAS 0
        amplitudes = [1/3*temp_range/2, 2/3*temp_range/2]

        sample_rate = 60
        random_periods = True
        baseline_temp = participant_info['baseline_temp'] # @ VAS 35

        # While debugging, the code in stimuli_function is outcommented
        plateau_duration = 20
        n_plateaus = 4
        add_at_start = "random"
        add_at_end = True

        # Time
        stimuli_clock = core.Clock()
        iti_duration = 8  + np.random.randint(0, 5)
        vas_labels = ("Keine\nSchmerzen", "Sehr starke Schmerzen")

        # Thermoino
        port = "COM7" # use list_com_ports() beforehand to find out
        mms_baseline = 30 # has to be the same as in MMS (not the same as baseline_temp (sorry for confusing names))
        mms_rate_of_rise = 10 # has to be the same as in MMS
        bin_size_ms = 500
      End Experiment:
        # Moved close_logger(psychopy_logger) to trial_end component
    CodeComponent imotions_control
      Code Type = Py
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      Before Experiment:
        from src.experiments.imotions import RemoteControliMotions
      Begin Experiment:
        imotions_control = RemoteControliMotions(
            study = expInfo['expName'],
            participant = expInfo['participant'],
            age = expInfo['age'],
            gender = expInfo['gender']
        )

        imotions_control.connect()
        imotions_control.start_study(mode=start_study_mode)
      End Experiment:
        imotions_control.end_study()
        imotions_control.close()
    TextComponent text_welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Willkommen zum Haupt-Experiment!


        (Leertaste drücken, um zu starten)
    KeyboardComponent key_welcome
      allowedKeys = 'j','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine welcome_2
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    TextComponent text_welcome_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Mit diesem Experiment möchten wir Schmerzen objektiv messbar machen.


        (Leertaste drücken, um fortzufahren)
    KeyboardComponent key_welcome_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine welcome_3
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    TextComponent text_welcome_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Das Experiment besteht aus insgesamt 12 Blöcken á 4 Minuten.

        In jedem Block erhalten Sie Temperatur-Reize mit schwankender Intensität.


        (Leertaste drücken, um fortzufahren)
    KeyboardComponent key_welcome_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction
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    CodeComponent mouse_instruction
      Code Type = Py
      Before Experiment:
        import src.experiments.mouse_action as mouse_action
        from src.experiments.mouse_action import pixel_pos_y
      Begin Routine:
        vas_pos_y = pixel_pos_y(
            component_pos = vas_cont.pos,
            win_size = win.size,
            win_pos = win.pos)

        mouse_action.hold()
      Each Frame:
        mouse_action.check(vas_pos_y)
    TextComponent text_instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ihre Aufgabe ist es, Ihren Schmerzpegel fortwährend zu bewerten.
        Dafür bewegen Sie den Mauszeiger auf der Skala einfach hin und her.






        (Leertaste drücken, um fortzufahren)
    KeyboardComponent key_instruction
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SliderComponent vas_cont_instruction
      color = White
      forceEndRoutine = False
      granularity = 0
      initVal = 50
      labels = vas_labels
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0, 100)
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  Routine instruction_2
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    CodeComponent mouse_instruction_2
      Code Type = Py
      Each Frame:
        mouse_action.check(vas_pos_y)
      End Routine:
        mouse_action.release()
    TextComponent text_instruction_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Die Beschriftungen "Keine Schmerzen" und "Sehr starke Schmerzen" entsprechen dabei Ihren Werten aus der Kalibrierung. Nutzen Sie die gesamte Breite der Skala!







        (Leertaste drücken, um fortzufahren)
    KeyboardComponent key_instruction_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SliderComponent vas_cont_instruction_2
      color = White
      forceEndRoutine = False
      granularity = 0
      initVal = 50
      labels = vas_labels
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0, 100)
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  Routine ready
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    TextComponent text_ready
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Sollten Sie noch Fragen haben, richten Sie sich bitte jetzt an die Versuchsleitung.

        Ansonsten startet nun das Experiment.


        (Leertaste drücken, um fortzufahren)
    KeyboardComponent key_ready
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_prep
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    CodeComponent stimuli_function
      Code Type = Py
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      Before Experiment:
        from src.experiments.stimuli_function import StimuliFunction
      Begin Routine:
        trial = loop_trials.thisN

        stimuli = StimuliFunction(
            minimal_desired_duration=minimal_desired_duration,
            frequencies=frequencies,
            amplitudes=amplitudes,
            sample_rate=sample_rate,
            random_periods=random_periods,
            seed=seeds[trial]
        ).add_baseline_temp(
            baseline_temp=baseline_temp
        ).add_plateaus(
            plateau_duration=plateau_duration,
            n_plateaus=n_plateaus,
            add_at_start=add_at_start,
            add_at_end=add_at_end)
    CodeComponent thermoino_prep
      Code Type = Py
      Begin Routine:
        luigi.flush_ctc()
        luigi.init_ctc(bin_size_ms=bin_size_ms)
        luigi.create_ctc(
            temp_course=stimuli.wave,
            sample_rate=stimuli.sample_rate,
            rate_of_rise_option="mms_program")
        luigi.load_ctc()
        luigi.trigger()

        prep_duration = luigi.prep_ctc()[1]
    CodeComponent mouse_prep
      Code Type = Py
      Begin Routine:
        vas_pos_y = pixel_pos_y(
            component_pos = vas_cont.pos,
            win_size = win.size,
            win_pos = win.pos)

        mouse_action.hold()
      Each Frame:
        mouse_action.check(vas_pos_y)
    CodeComponent rating_prep
      Code Type = Py
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      Begin Routine:
        stimuli_clock.reset()
      Each Frame:
        # Cheap workaround to get the last rating of the prep slider
        if prep_duration - 1 < stimuli_clock.getTime():
            prep_vas_rating = vas_cont_prep.getMarkerPos()
    SliderComponent vas_cont_prep
      color = White
      durationEstim = 2
      forceEndRoutine = False
      granularity = 0
      initVal = 50
      labels = vas_labels
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = prep_duration
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0, 100)
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  Routine trial_vas_continuous
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    CodeComponent thermoino
      Code Type = Py
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      Before Experiment:
        from src.experiments.thermoino import ThermoinoComplexTimeCourses
      Begin Experiment:
        luigi = ThermoinoComplexTimeCourses(
            port=port,
            mms_baseline=mms_baseline,
            mms_rate_of_rise=mms_rate_of_rise)

        luigi.connect()
      Begin Routine:
        # After we have reached the starting temperature for the ctc.
        luigi.exec_ctc()
      End Experiment:
        luigi.close()
    CodeComponent imotions_event
      Code Type = Py
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      Before Experiment:
        from src.experiments.imotions import EventRecievingiMotions
        from psychopy import core
      Begin Experiment:
        """ Connect with event recieving API """
        imotions_event = EventRecievingiMotions()
        imotions_event.connect()
        imotions_event.start_study

        # create a clock
        stimuli_clock = core.Clock()
      Begin Routine:
        """ Send discrete marker for stimuli beginning """
        # TODO: add imotions marker for stimuli start and end
        imotions_event.send_marker("stimuli", "Stimuli begins")
        # Start the clock
        stimuli_clock.reset()
      Each Frame:
        """ Stream data for pain rating """
        imotions_event.send_ratings(
            vas_cont.getMarkerPos())

        idx_stimuli = int(stimuli_clock.getTime()*stimuli.sample_rate)
        if idx_stimuli < len(stimuli.wave):
            imotions_event.send_temperatures(stimuli.wave[idx_stimuli])
      End Experiment:
        """ Close event recieving API connection """
        imotions_event.end_study()
        imotions_event.close()
      End Routine:
        """ Send discrete marker for stimuli ending """
        imotions_event.send_marker("stimuli", "Stimuli ends")
    CodeComponent mouse
      Code Type = Py
      Begin Routine:
        # Everything stays the same from the prep scale
      Each Frame:
        mouse_action.check(vas_pos_y)
      End Routine:
        mouse_action.release()
    CodeComponent rating
      Code Type = Py
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      Begin Routine:
        # Set the starting VAS value of the slider accordingly to the prep slider
        # This has to be done after the slider initialization
        vas_cont.startValue = prep_vas_rating
    SliderComponent vas_cont
      color = White
      durationEstim = 250
      forceEndRoutine = False
      granularity = 0
      labels = vas_labels
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = stimuli.duration
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0, 100)
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    TextComponent text_vas_cont
      disabled = True
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stimuli.duration
      text [set every frame] = $f"Dies ist eine kontinuierliche VAS.\n\nIhr momentaner Schmerz liegt bei: {vas_cont.getMarkerPos():.0f}" if vas_cont.getMarkerPos() is not None else "Dies ist eine kontinuierliche VAS.\n\nIhr momentaner  Schmerz liegt bei: --"
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  Routine trial_end
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    CodeComponent reset_temp
      Code Type = Py
      Begin Routine:
        # Sometimes the Theroino takes some time to set the temperature back to baseline
        # Here, we force this with a loop for each frame.
        success = False
      Each Frame:
        if not success and frameN % 20 == 0:
            success = luigi.set_temp(mms_baseline)[2]
    CodeComponent trial_end
      Code Type = Py
      Begin Experiment:
        this_trial = None
      Begin Routine:
        # Store the trial number for conditional text box
        this_trial = loop_trials.thisN
      End Experiment:
        close_logger(psychopy_logger)
    TextComponent text_trial_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Dieser Block ist geschafft.\n\nNun wechseln wir die Haustelle am Arm.\nBitte melden Sie sich bei der Versuchsleitung.\n\n\n(Leertaste drücken, um fortzufahren)" if this_trial != n_trials -1 else "Das Experiment ist vorbei.\n\n\nVielen Dank für Ihre Teilnahme!"
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    KeyboardComponent key_trial_end
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_next
    RoutineSettingsComponent trial_next
      skipIf = this_trial == n_trials -1
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    KeyboardComponent key_trial_next
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_trial_next
      letterHeight = 0.05
      startVal [time (s)] = 0
      text = (Leertaste drücken, um fortzufahren)
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Flow
  Routine welcome
  Routine welcome_2
  Routine welcome_3
  Routine instruction
  Routine instruction_2
  Routine ready
  LoopInitiator loop_trials loopType="TrialHandler"
    loopType = random
    nReps = n_trials
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    Routine trial_prep
    Routine trial_vas_continuous
    Routine trial_end
    Routine trial_next
  LoopTerminator loop_trials
