PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = mpad2_exp
  keyboardBackend = ioHub
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Routines
  Routine welcome
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    CodeComponent all_variables
      Code Type = Py
      Before Experiment:
        # just copy & pasted from mpad1
        # TODO
        # fix baseline_temp & temp_baseline for all scripts
        # set start_study_mode to NoPrompt
        prep_duration = 1 # just for debugging; to be deleted

        # Experiment
        from src.experiments.logger import setup_logger, close_logger
        from src.experiments.participant_data import read_last_participant

        logger_for_runner = setup_logger(__name__.rsplit(".", maxsplit=1)[-1], level=logging.INFO)

        participant_info = read_last_participant()
        expInfo['expName'] = "mpad1_exp"
        expInfo['participant'] = participant_info['participant']
        expInfo['age'] = participant_info['age']
        expInfo['gender'] = participant_info['gender']

        # iMotions
        start_study_mode = "NormalPrompt"

        # Stimuli
        seeds = [463, 320]#, 43, 999, 242, 32, 1, 98, 478, 48, 435]
        n_trials = len(seeds)
        this_trial = None # just initializing

        minimal_desired_duration = 2 # in seconds
        periods = [67, 20] # [0] is the baseline and [1] the modulation; in seconds
        frequencies = 1./np.array(periods)
        # calculate amplitudes based on VAS 70 - VAS 0
        temp_range = participant_info['temp_range'] # VAS 70 - VAS 0
        amplitudes = [1/3*temp_range/2, 2/3*temp_range/2]

        sample_rate = 60
        random_periods = True
        baseline_temp = participant_info['baseline_temp'] # @ VAS 35

        # While debugging, the code in stimuli_function is outcommented
        plateau_duration = 20
        n_plateaus = 4
        add_at_start = "random"
        add_at_end = True

        # Time
        stimuli_clock = core.Clock()
        iti_duration = 2 # 8  + np.random.randint(0, 5)
        vas_labels = ("Keine\nSchmerzen", "Sehr starke Schmerzen")

        # Thermoino
        port = "COM7" # use list_com_ports() beforehand to find out
        temp_baseline = 30 # has to be the same as in MMS (not the same as baseline_temp (sorry for confusing names))
        rate_of_rise = 5 # has to be the same as in MMS
        bin_size_ms = 500
      End Experiment:
        close_logger(logger_for_runner)
Flow
  Routine welcome
