PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Data filename = u'%s/data/%s_%s_%s' % (runs_psychopy_path(_thisDir,"data"), expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'age': '', 'gender': '["","Female","Male"]', 'session': '01', 'dummy': 'False'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  expName = calibration
  keyboardBackend = ioHub
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Routines
  Routine welcome
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    CodeComponent all_variables
      Code Type = Py
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      Before Experiment:
        # Config
        import json
        config_path = os.path.join(_thisDir, 'config.json')
        with open(config_path, 'r') as file:
            config = json.load(file)

        # Logger
        import logging as python_logging
        # psychopy imports psychopy.logging as logging, hence the rename
        from src.psychopy.psychopy_utils import runs_psychopy_path
        from src.log_config import configure_logging, close_root_logging
        configure_logging(file_path=runs_psychopy_path(_thisDir, "logs"), ignore_libs=["PIL"])
        # note that we specified the psychopy data folder via the preferences in the builder using the same function

        # Psychopy
        from src.psychopy.psychopy_utils import rgb255_to_rgb_psychopy
        element_color = rgb255_to_rgb_psychopy(config['psychopy']['element_color'])
        cross_pain_color = rgb255_to_rgb_psychopy(config['psychopy']['cross_pain_color'])
        cross_size = config['psychopy']['cross_size']

        # Thermoino
        port = config['thermoino']['port']
        mms_baseline = config['thermoino']['mms_baseline'] # has to be the same as in MMS (not the same as baseline_temp)
        mms_rate_of_rise = config['thermoino']['mms_rate_of_rise'] # has to be the same as in MMS
        bin_size_ms = config['thermoino']['bin_size_ms']

        # Stimuli
        stimuli_clock = core.Clock()
        stimuli_duration = config['stimuli']['stimuli_duration']
        iti_duration = config['stimuli']['iti_duration'] + np.random.randint(0, config['stimuli']['iti_max_jitter'])
        iti_duration_short = config['stimuli']['iti_duration_short']

        temps_preexposure = config['stimuli']['temps_preexposure']
        correction_after_preexposure = config['stimuli']['correction_after_preexposure'] # we substract from temp_start_vas70

        # Estimator
        trials_vas70 = config['estimator']['trials_vas70'] # is the same as nReps in psychopy loop
        temp_start_vas70 = config['estimator']['temp_start_vas70']
        temp_std_vas70 = config['estimator']['temp_std_vas70']

        trials_vas0 = config['estimator']['trials_vas0'] # is the same as nReps in psychopy loop
        temp_start_vas0 = config['estimator']['temp_start_vas0'] #  will be set after VAS 0 estimate
        temp_start_vas0_minus = config['estimator']['temp_start_vas0_minus']  # VAS 0 estimate plus int
        temp_std_vas0 = config['estimator']['temp_std_vas0']
      Begin Experiment:
        # Import dummy scripts for debugging if specified
        if expInfo["dummy"] is True:
            from src.psychopy.thermoino_dummy import Thermoino
            expInfo["participant"] = "dummy"
        else:
            from src.psychopy.thermoino import Thermoino
      Begin Routine:
        # "remind" psychopy to hide the mouse
        win.mouseVisible = False
      End Experiment:
        close_root_logging()
    CodeComponent thermoino
      Code Type = Py
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      Begin Experiment:
        luigi = Thermoino(
            port=port,
            mms_baseline=mms_baseline, # has to be the same as in MMS
            mms_rate_of_rise=mms_rate_of_rise) # has to be the same as in MMS

        luigi.connect()
      End Experiment:
        luigi.close()
    TextComponent text_welcome
      color = $element_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Herzlich willkommen zum Experiment!


        Bitte drücken Sie die Leertaste.
    KeyboardComponent key_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine welcome_2
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    TextComponent text_welcome_2
      color = $element_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Wir beginnen das Experiment mit einer Schmerz-Kalibrierung.


        (Leertaste drücken, um fortzufahren)
    KeyboardComponent key_welcome_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine welcome_3
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    TextComponent text_welcome_3
      color = $element_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Hierzu wärmen wir die Hautstelle an Ihrem Arm zuerst kurz auf.

        Anschließend bestimmen wir, ab wann Sie leichte und starke Schmerzen verspüren.


        (Leertaste drücken, um fortzufahren)
    KeyboardComponent key_welcome_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine info_preexposure
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    TextComponent text_info_preexposure
      color = $element_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Wir beginnen mit dem Aufwärmen der Hautstelle.
        Hierbei müssen Sie nichts weiter tun.


        (Leertaste drücken, um fortzufahren)
    KeyboardComponent key_info_preexposure
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine iti_short
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    PolygonComponent cross_neutral_short
      fillColor = $element_color
      lineColor = $element_color
      shape = cross
      size = cross_size
      startVal [time (s)] = 0
      stopVal [duration (s)] = iti_duration_short
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  Routine iti
    RoutineSettingsComponent iti
      skipIf = loop_preexposure.thisN == 0
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    PolygonComponent cross_neutral
      fillColor = $element_color
      lineColor = $element_color
      shape = cross
      size = cross_size
      startVal [time (s)] = 0
      stopVal [duration (s)] = iti_duration
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  Routine preexposure
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    CodeComponent thermoino_prexposure
      Code Type = Py
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      Begin Routine:
        checked = False
        stimuli_clock.reset()

        trial = loop_preexposure.thisN
        luigi.trigger()
        time_for_ramp_up = luigi.set_temp(temps_preexposure[trial])[1]
      Each Frame:
        if not checked:
            if stimuli_clock.getTime() > (time_for_ramp_up + stimuli_duration):
                luigi.set_temp(mms_baseline)
                checked = True
    PolygonComponent cross_pain_preexposure
      fillColor = $cross_pain_color
      lineColor = $cross_pain_color
      shape = cross
      size = cross_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stimuli_duration + 2
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  Routine feedback_preexposure
    RoutineSettingsComponent feedback_preexposure
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      desc:
        War ein Reiz schmerzhaft?

        (y/n)
    TextComponent question_preexposure
      color = $element_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        War einer dieser Reize für Sie schmerzhaft?

        (Drücken Sie "y" für Ja oder "n" für Nein.)
    KeyboardComponent response_preexposure
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine count_in_preexposure
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    CodeComponent transition_preexposure_to_vas70
      Code Type = Py
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      End Routine:
        # If response was yes
        python_logging.info("Preexposure painful? Answer: %s", response_preexposure.keys)

        if response_preexposure.keys == "y":
            # Decrease starting temperature
            global temp_start_vas70 # psychopy has to be able to find it in the spaghetti
            temp_start_vas70 -= correction_after_preexposure
            # Reinitialize estimator for VAS 70 with different temp_start
            global estimator_vas70
            estimator_vas70 = BayesianEstimatorVAS(
                vas_value=70,
                temp_start=temp_start_vas70,
                temp_std=temp_std_vas70,
                trials=trials_vas70)
    TextComponent text_answer_preexposure
      color = $element_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $"Ihre Antwort war: Nein." if response_preexposure.keys == "n" else "Ihre Antwort war: Ja."
  Routine info_vas70
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    TextComponent text_info_vas70
      color = $element_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Als Nächstes möchten wir herausfinden, ab wann Sie starke Schmerzen verspüren.


        (Leertaste drücken, um fortzufahren)
    KeyboardComponent key_info_vas70
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine info_vas70_2
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    TextComponent text_info_vas70_2
      color = $element_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Dazu orientieren wir uns an einer Schmerz-Skala von 1 bis 10:








        Unser Ziel ist es, herauszufinden, ab wann Sie eine 7 von 10 (starke / sehr starke Schmerzen) verspüren.

        (Leertaste drücken, um fortzufahren)
    KeyboardComponent key_info_vas70_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent img_vas
      image = vas_7.png
      pos = (0, 0.1)
      size = (1, 0.4)
      startVal [time (s)] = 0.0
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  Routine info_vas_70_3
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    TextComponent text_info_vas70_3
      color = $element_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Aufgrund der Capsaicin-Creme ist Ihre Schmerzschwelle nach unten verlagert. Dadurch verspüren Sie schneller starken Schmerz.

        Aber keine Sorge: Zu keinem Zeitpunkt ist Ihre Haut durch Verbrennungen oder Ähnliches bedroht.


        (Leertaste drücken, um fortzufahren)
    KeyboardComponent key_vas_70_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_vas70
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    CodeComponent thermoino_vas70
      Code Type = Py
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      Begin Routine:
        checked = False
        stimuli_clock.reset()

        luigi.trigger()
        time_for_ramp_up = luigi.set_temp(estimator_vas70.current_temp)[1]
      Each Frame:
        if not checked:
            if stimuli_clock.getTime() > (time_for_ramp_up + stimuli_duration):
                luigi.set_temp(mms_baseline)
                checked = True
    PolygonComponent cross_pain_vas70
      fillColor = $cross_pain_color
      lineColor = $cross_pain_color
      shape = cross
      size = cross_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stimuli_duration + 2
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  Routine feedback_vas70
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    TextComponent question_vas70
      color = $element_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = response_vas70.status==FINISHED
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      text:
        War dieser Reiz mindestens eine 7 von 10 (starker / sehr starker Schmerz)?

        (y/n)
    KeyboardComponent response_vas70
      allowedKeys = 'y','n'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine estimate_vas70
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    CodeComponent estimator_vas70
      Code Type = Py
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      Before Experiment:
        from src.psychopy.estimator import BayesianEstimatorVAS

        # Estimator for VAS 70
        estimator_vas70 = BayesianEstimatorVAS(
            vas_value= 70,
            temp_start=temp_start_vas70,
            temp_std=temp_std_vas70,
            trials=trials_vas70)
      Begin Routine:
        trial = loop_vas70.thisN
        estimator_vas70.conduct_trial(response=response_vas70.keys,trial=trial)
    TextComponent answer_vas70
      color = $element_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $f"Ihre Antwort war: Nein." if response_vas70.keys == "n" else "Ihre Antwort war: Ja."
  Routine estimate_vas0
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    CodeComponent estimator_vas0
      Code Type = Py
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      Before Experiment:
        # instantiating here does not make sense because we need the values from the VAS 0 esitmator first
      Begin Routine:
        trial = loop_vas0.thisN
        estimator_vas0.conduct_trial(response=response_vas0.keys,trial=trial)
    TextComponent answer_vas0
      color = $element_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $f"Ihre Antwort war: Nein." if response_vas0.keys == "n" else "Ihre Antwort war: Ja."
  Routine bye
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    CodeComponent save_participant_data
      Code Type = Py
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      Before Experiment:
        from src.psychopy.participant_data import add_participant
      End Routine:
        add_participant(
            expInfo['participant'],
            expInfo['age'],
            expInfo['gender'],
            estimator_vas0.get_estimate(),
            estimator_vas70.get_estimate())
    TextComponent text_bye
      color = $element_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Vielen Dank!

        Als Nächstes geht es mit dem Hauptexperiment weiter.
        Bitte melden Sie sich bei der Versuchsleitung.


        (Leertaste drücken, um Kalibrierung zu beenden)
    KeyboardComponent key_bye
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback_vas0
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    TextComponent question_vas0
      color = $element_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = response_vas0.status==FINISHED
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      text:
        War dieser Reiz für Sie schmerzhaft?

        (y/n)
    KeyboardComponent response_vas0
      allowedKeys = 'y','n'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine trial_vas0
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    CodeComponent thermoino_vas0
      Code Type = Py
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      Begin Routine:
        checked = False
        stimuli_clock.reset()

        luigi.trigger()
        time_for_ramp_up = luigi.set_temp(estimator_vas0.current_temp)[1]
      Each Frame:
        if not checked:
            if stimuli_clock.getTime() > (time_for_ramp_up + stimuli_duration):
                luigi.set_temp(mms_baseline)
                checked = True
    PolygonComponent cross_pain_vas0
      fillColor = $cross_pain_color
      lineColor = $cross_pain_color
      shape = cross
      size = cross_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stimuli_duration + 2
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  Routine info_vas0_transition
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    CodeComponent init_estimator_vas0
      Code Type = Py
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      Begin Routine:
        # Preparing estimator for VAS 0
        # slight overshoot to showcase the full range of possible temperatures
        temp_start_vas0 = estimator_vas70.get_estimate() - temp_start_vas0_minus

        estimator_vas0 = BayesianEstimatorVAS(
            vas_value=0,
            temp_start= temp_start_vas0,
            temp_std=temp_std_vas0,
            trials=trials_vas0)
    TextComponent text_info_vas0
      color = $element_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Wunderbar!


        Als Nächstes möchten wir bestimmen, wo Ihre Schmerzschwelle liegt - also ab wann Sie erste Schmerzen verspüren.


        (Leertaste drücken, um fortzufahren)
    KeyboardComponent key_info_vas0
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine welcome_2
  Routine welcome_3
  Routine info_preexposure
  Routine iti_short
  LoopInitiator loop_preexposure loopType="TrialHandler"
    loopType = random
    nReps = len(temps_preexposure)
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    Routine iti
    Routine preexposure
  LoopTerminator loop_preexposure
  Routine feedback_preexposure
  Routine count_in_preexposure
  Routine info_vas70
  Routine info_vas70_2
  Routine info_vas_70_3
  LoopInitiator loop_vas70 loopType="TrialHandler"
    loopType = random
    nReps = trials_vas70
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    Routine iti
    Routine trial_vas70
    Routine feedback_vas70
    Routine estimate_vas70
  LoopTerminator loop_vas70
  Routine info_vas0_transition
  LoopInitiator loop_vas0 loopType="TrialHandler"
    loopType = random
    nReps = trials_vas0
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    Routine iti
    Routine trial_vas0
    Routine feedback_vas0
    Routine estimate_vas0
  LoopTerminator loop_vas0
  Routine bye
